<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:GratingParameters;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DrawGratings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\VisStimMachine\Schemas\grating-parameters-1.yml</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromYaml">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:GratingParameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.GratingDefinition</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Angle</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SpatialFrequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SpatialFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TemporalFrequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TemporalFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>2</ExtentX>
              <ExtentY>2</ExtentY>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>10</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>0.5</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0.5</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="18" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="18" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source4" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DrawGratings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\VisStimMachine\Schemas\grating-parameters-2.yml</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromYaml">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:GratingParameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.GratingDefinition</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Angle</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SpatialFrequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SpatialFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TemporalFrequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TemporalFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>2</ExtentX>
              <ExtentY>2</ExtentY>
              <SpatialFrequency>20</SpatialFrequency>
              <TemporalFrequency>5</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>2578.31</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>0.5</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0.5</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="18" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="18" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source4" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DrawGratings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\VisStimMachine\Schemas\grating-parameters-2.yml</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromYaml">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:GratingParameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.GratingDefinition</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
              <ExtentX>2</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <NumberColumns>3</NumberColumns>
              <NumberRows>3</NumberRows>
              <Phase>0</Phase>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source3" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>